PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = vb_task
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Before Experiment:
        corrAns = "left"
    TextComponent question_mark
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 2.5
      opacity [set every frame] = 1
      startVal [time (s)] = 2.0
      text = ?
      units = cm
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent avec
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 1
      pos = (-5, 0)
      startVal [time (s)] = 0.0
      text = $"Avec"+"\n flèche gauche"
      units = cm
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    TextComponent sans
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 1
      pos = (5, 0)
      startVal [time (s)] = 0.0
      text = $"Sans"+"\n flèche droite"
      units = cm
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  Routine instructions_1
    TextComponent text_instr
      letterHeight = 0.04
      pos = (0.0, 0.0)
      startVal [time (s)] = 0.0
      text = $"Règles du jeu"+'\n' + " \n Tu es un dénicheur de talent de joueurs de volleyball et, en vue de la prochaine saison, tu es contacté par les équipes  de la ligue pour évaluer l'impact des nouveaux joueurs. " + "\n Chacune des 45 équipes de la ligue aimerait avoir ton avis pour décider de signer ou non un nouveau joueur." + " \n Pour mieux évaluer chaque nouveau joueur proposé par chaque équipe, vous aurez la possibilité de simuler une série de matchs tests. Cela vous permettra de comprendre comment l'équipe en question se comporte (c'est-à-dire si elle gagne ou perd) selon que le nouveau joueur entre sur le terrain ou non."
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instructions_2
    TextComponent text_instr_2
      letterHeight = 0.04
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
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      text:
        $"Règles du jeu" + "\n"+" \n A chaque partie, vous décidez vous-même si vous laissez le joueur participer ou si laissez-le sur le banc." + "\n Rappelez-vous que votre objectif n'est pas de faire gagner le plus de matchs à l'équipe, mais d'évaluer l'impact du joueur, c'est-à-dire de comprendre s'il est utile à l'équipe en question."
    ImageComponent image_next_2
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instructions_3
    TextComponent text_instr_3
      letterHeight = 0.04
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
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      text:
        $"Règles du jeu"+ "\n"+"\n Pour chaque joueur, vous pourrez simuler un certain nombre de parties à l'aide des touches «flèche droite» et «flèche gauche» sur le clavier."+"\n En choisissant « Avec », vous simulerez un match de l'équipe en question avec la participation du joueur." +"\n En choisissant « Sans », vous simulerez une partie sans sa participation."
    ImageComponent image_next_3
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent image_with
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_without
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine instructions_4
    TextComponent text_instr_4
      letterHeight = 0.04
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
      text = $"Règles du jeu" + "\n"+"\n Par la suite, un smiley indiquera si l'équipe avec ou sans le joueur a gagné (smiley face) ou si elle a perdu (sad face)"
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    ImageComponent image_next_4
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_4
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent images_win
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_loose
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine instructions_5
    TextComponent text_instr_5
      letterHeight = 0.04
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
      text = $"Règles du jeu" + "\n"+ " \n Le délai pour prendre vos décisions sera de 2 secondes après la disparition du smiley. Si vous retardez trop longtemps votre décision, un point d'interrogation apparaîtra indiquant que vous devrez choisir plus rapidement."
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    ImageComponent image_next_5
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_5
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instructions_6
    TextComponent text_instr_6
      letterHeight = 0.04
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
      text = $"Règles du jeu" + "\n"+ " \n Pour chaque joueur, vous aurez la possibilité de simuler un nombre variable de matchs avant de passer au joueur et à l'équipe suivants." + "\n Le nombre de jeux que vous pouvez simuler variera aléatoirement d'un minimum de 5 à un maximum de 40."
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    ImageComponent image_next_6
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_6
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instructions_7
    TextComponent text_instr_7
      letterHeight = 0.04
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
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      text:
        $"Règles du jeu" + "\n"+ " \n Ensuite, il vous sera demandé d'évaluer la valeur du joueur avec un score compris entre 0 (valeur minimale) et 10 (valeur maximale)." + "\n Par exemple:" + " \n 10 : Le joueur fait toujours gagner l'équipe qu'il joue" + "\n 0 : Le joueur n'a pas d'impact dans l'équipe" + "\n Il vous sera alors demandé si vous recommanderiez l'achat du lecteur."
    ImageComponent image_next_7
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_7
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instructions_8
    TextComponent text_instr_8
      letterHeight = 0.04
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
      text = $"Règles du jeu" + "\n"+ " \n Paiement: Une fois les 45 joueurs et équipes évalués, nous calculerons votre rémunération en fonction de la précision de la valeur que vous avez donnée aux différents joueurs (0 à 10) par rapport à leur impact réel." + "\n Le jugement concernant un seul joueur sera tiré au sort pour le calcul du paiement. Si la valeur que vous avez estimée est identique à la valeur réelle du joueur, vous gagnerez 10€." + " \n Plus vous vous éloignez de la valeur réelle, moins vous serez payé (selon le schéma ci-contre)" + "\n Cette somme s'ajoutera aux 5 € de jetons de présence."
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    ImageComponent image_next_8
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_8
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instructions_9
    TextComponent text_instr_9
      letterHeight = 0.04
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
      text = $"Fin des instructions"
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    ImageComponent image_next_9
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_9
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine outcome
    CodeComponent fb_code
      Code Type = Py
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        bern_param_play = 0.5
        bern_param_not_play = 0.5

        if key_resp.corr:
            # c'est à dire si left est actionné en l'occurence play
            # on a Bern(p)
            outcome = np.random.binomial(1, bern_param_play, size=1)
            if outcome == 1 :
                fb_text = 'images/Win.png'
            else:
                fb_text = 'images/Lose.png'
        else:
            # ie si right est actionné
            outcome = np.random.bernoulli(1, bern_param_not_play, size=1)
            if outcome == 1:
                fb_text = 'images/Win.png'
            else:
                fb_text = 'images/Lose.png'
    ImageComponent image_outcome
      image [set every frame] = $fb_text
      size = (3.5, 3.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = cm
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Flow
  Routine instructions_1
  Routine instructions_2
  Routine instructions_3
  Routine instructions_4
  Routine instructions_5
  Routine instructions_6
  Routine instructions_7
  Routine instructions_8
  Routine instructions_9
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine trial
    Routine outcome
  LoopTerminator trials
