PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'group': "['A', 'B']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2
  Window size (pixels) = [1800, 1169]
  expName = vb_task_exp_1
  keyboardBackend = ioHub
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Routines
  Routine instructions_4
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    TextComponent text_instr_4
      letterHeight = 0.026
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
      text = $"Rémunération"+"\n 1. À la fin de chaque série de jeux, vous évaluerez l'impact du joueur sur les matchs entre -10 (minimal) et 10 (maximal) en passant par 0 (neutre) et recommenderez ou non l'achat du joueur." +"\n 2. Votre rémunération sera calculée en fonction de la précision de l'impact que vous avez attribué aux différents joueurs par rapport à leur impact réel."+"\n 3. Un seul joueur sera sélectionné au hasard pour le calcul du paiement." + "\n 4. Si l'impact estimé est identique à l'impact réel, vous gagnerez 10 €." +"\n 5. Plus vous vous éloignez de l'impact réel moins vous serez payé." +"\n 6. Cette somme s'ajoutera aux 5 € de jetons de présence." +"\n Appuyez sur la touche espace pour continuer."
      wrapWidth = 0.56
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    ImageComponent images_win
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_loose
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_5
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    TextComponent text_instr_5
      letterHeight = 0.04
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
      text = $"Règles du jeu" + "\n"+ " \n Le délai pour prendre ta décision sera de 2 secondes après la disparition du smiley. Si tu retardes trop longtemps ta décision, un point d'interrogation apparaîtra indiquant que tu devras choisir plus rapidement."
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    ImageComponent image_next_5
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_5
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instructions_6
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    TextComponent text_instr_6
      letterHeight = 0.04
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
      text = $"Règles du jeu" + "\n"+ " \n Pour chaque joueur, tu auras la possibilité de jouer un nombre variable de matchs avant de passer au joueur et à l'équipe suivants." + "\n Le nombre de matchs que tu pourras réaliser variera aléatoirement d'un minimum de 5 à un maximum de 40."
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    ImageComponent image_next_6
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_6
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instructions_7
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    TextComponent text_instr_7
      letterHeight = 0.04
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
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      text:
        $"Règles du jeu" + "\n"+ " \n Ensuite, il te sera demandé d'évaluer l'impact du joueur sur l'ensemble des matchs avec un score compris entre 0 (impact minimale) et 10 (impact maximale)." + "\n Par exemple:" + " \n 10 : Le joueur fait toujours gagner l'équipe quand il joue" + "\n 0 : Le joueur n'a pas d'impact sur le match" + "\n Il te sera alors demandé si tu recommandes l'achat du joueur ou pas."
    ImageComponent image_next_7
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_7
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine pause
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $str(10-int(t))
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  Routine trial_1
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    VariableComponent nombre_matchs_first
      saveStartStop = False
      startExpValue = 1
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    CodeComponent code_3
      Code Type = Auto->JS
    TextComponent question_mark
      color = black
      letterHeight = 0.026
      opacity [set every frame] = 1
      pos = (0, -0.1)
      startVal [time (s)] = 2.0
      text = Trop lent
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = left
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent avec
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 1
      pos = (-6, 0)
      startVal [time (s)] = 0.0
      text = $"avec"+"\n (flèche gauche)"
      units = cm
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    TextComponent sans
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 1
      pos = (5, 0)
      startVal [time (s)] = 0.0
      text = $"sans"+"\n (flèche droite)"
      units = cm
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    TextComponent nombre_match_1
      color = black
      letterHeight = 0.026
      pos = (-0.5, 0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $"match n° {}".format(nombre_matchs_first)
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    TextComponent numero_joueur
      color = black
      letterHeight = 0.026
      pos = (-0.5, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"joueur {}".format(Condition)
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    TextComponent text_question_trial1
      color = black
      letterHeight = 1
      pos = (0, 10)
      startVal [time (s)] = 0.0
      text = Voulez vous faire jouer l'équipe avec ou sans le joueur?
      units = cm
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  Routine outcome_1
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    CodeComponent fb_code
      Code Type = Py
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        #bern_param_play = 0.5
        #bern_param_not_play = 0.5

        if key_resp.keys == 'left':
            # c'est à dire si left est actionné en l'occurence play
            # on a Bern(p)
            outcome1 = np.random.binomial(1, bern_param_play, size=1)

            fb_avec_first_color = 'white'
            fb_sans_first_color = 'black'

            if outcome1 == 1 :
                fb_text1 = 'images/Win.png'
                resultat_first = "C'est une victoire!"
            else:
                fb_text1 = 'images/Lose.png'
                resultat_first = "C'est une défaite!"

        if key_resp.keys == 'right':
            # ie si right est actionné
            outcome1 = np.random.binomial(1, bern_param_not_play, size=1)

            fb_avec_first_color = 'black'
            fb_sans_first_color = 'white'

            if outcome1 == 1:
                fb_text1 = 'images/Win.png'
                resultat_first = "C'est une victoire!"
            else:
                fb_text1 = 'images/Lose.png'
                resultat_first = "C'est une défaite!"
      End Routine:
        nombre_matchs_first += 1
    ImageComponent image_outcome
      image [set every frame] = $fb_text1
      size = (3.5, 3.5)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 2.0
      units = cm
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    VariableComponent outcome1_var
      startRoutineValue = outcome1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    TextComponent nombre_matchs_outcome_1
      color = black
      letterHeight = 1
      pos = (-15, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every frame] = $"match numéro: {}".format(nombre_matchs_first)
      units = cm
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    TextComponent text_avec_fb_first
      color [set every frame] = $fb_avec_first_color
      letterHeight = 1
      pos = (-6, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = $"avec" +"\n (flèche gauche)"
      units = cm
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    TextComponent text_sans_fb_first
      color [set every frame] = $fb_sans_first_color
      letterHeight = 1
      pos = (5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = $"sans"+"\n (flèche droite)"
      units = cm
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    TextComponent text_resultat_first
      color = black
      letterHeight = 1
      pos = (0, 5)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 2
      text [set every frame] = $resultat_first
      units = cm
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    TextComponent numero_joueur_outcome
      color = black
      letterHeight = 1
      pos = (-15, 9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every frame] = $"joueur numéro: {}".format(Condition)
      units = cm
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    TextComponent text_question_outcome_trial1
      color = black
      letterHeight = 1
      pos = (0, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Voulez vous faire jouer l'équipe avec ou sans le joueur?
      units = cm
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  Routine questions
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    ImageComponent stimulus_2
      image = default.png
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    SliderComponent valence
      forceEndRoutine = True
      labels = "Sad", "Neutral", "Happy"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent arousal
      forceEndRoutine = True
      labels = "Not Arousing", "Neutral", "Highly Arousing"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent positivity
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine secondRun_instruction
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    TextComponent text_instr_10
      letterHeight = 1
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
      units = cm
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      text:
        $"Deuxième saison" + "\n L'endroit où joue l'équipe et le nouveau joueur influe sur les performances."+ "\n Pour rappel, dans cette deuxième saison, tu choisieras soit:"+ "\n - de faire jouer ou non le nouveau joueur"+"\n soit de fiare jouer l'équipe à domicile ou à l'extérieur"+"\n La fédération de volley a fait évoluer les règles et un coach adjoint t'assistera et prendra la décision complémentaire à chaque match."
    ImageComponent image_next_10
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_10
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine trial_2
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    VariableComponent nombre_matchs_second
      startExpValue = 1
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    KeyboardComponent key_resp_2
      allowedKeys = 'up','down','left','right'
      correctAns = up
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent question_mark_2
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      text = ?
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    TextComponent avec_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 1
      pos = (-5, 0)
      startVal [time (s)] = 0.0
      text = $"avec" + "\n (flèche gauche)"
      units = cm
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    TextComponent sans_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 1
      pos = (5, 0)
      startVal [time (s)] = 0.0
      text = $"sans" + "\n (flèche droite)"
      units = cm
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    TextComponent domicile
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 1
      pos = (0, 5)
      startVal [time (s)] = 0.0
      text = $"domicile" + "\n (flèche du haut)"
      units = cm
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    TextComponent exterieur
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 1
      pos = (0, -5)
      startVal [time (s)] = 0.0
      text = $"extérieur" + "\n (flèche du bas)"
      units = cm
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    TextComponent text_nombre_matchs
      color = black
      letterHeight = 1
      pos = (-10, 10)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"match numéro: {}".format(nombre_matchs_second)
      units = cm
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  Routine outcome_2
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    CodeComponent fb_code_2
      Code Type = Py
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        bern_params = { "bern_param_left_down": bern_param_left_down,
                        "bern_param_left_up": bern_param_left_up,
                        "bern_param_right_down": bern_param_right_down,
                        "bern_param_right_up": bern_param_right_up,
                        "bern_param_z": bern_param_z,
                        "bern_param_down": bern_param_down,
                        "bern_param_up": bern_param_up}


        if key_resp_2.keys == 'left':

            text_avec_outcome_second_color = "white"
            text_sans_outcome_second_color = "black"
            text_domicile_outcome_second_color = "black"
            text_exterieur_outcome_second_color = "black"

            # right or left (ie play or not play)
            other_choice = np.random.binomial(1, bern_param_z, size=1)
            terrain = "up" if other_choice[0] else "down"
            terrain_name = {"up": "domicile", "down": "exterieur"}
            outcome2 = np.random.binomial(1, \
                bern_params["bern_param_{}_{}".format(key_resp_2.keys, terrain)], size=1)

            # text for the trial
            fb_text_choice2 = " Choix du coach adjoint : \n {}".format(terrain_name[terrain])

            # image outcome assignement
            if outcome2[0] == 1:
                fb_text2 = 'images/Win.png'
                resultat_second = "C'est une victoire!"
            else:
                fb_text2 = 'images/Lose.png'
                resultat_second = "C'est une défaite!"

        if key_resp_2.keys == 'right':

            text_avec_outcome_second_color = "black"
            text_sans_outcome_second_color = "white"
            text_domicile_outcome_second_color = "black"
            text_exterieur_outcome_second_color = "black"

            # right or left (ie play or not play)
            other_choice = np.random.binomial(1, bern_param_z, size=1)
            terrain = "up" if other_choice[0] else "down"
            terrain_name = {"up": "domicile", "down": "exterieur"}
            outcome2 = np.random.binomial(1, \
                bern_params["bern_param_{}_{}".format(key_resp_2.keys, terrain)], size=1)

            # text for the trial
            fb_text_choice2 = " Choix du coach adjoint : \n {}".format(terrain_name[terrain])

            # image outcome assignement
            if outcome2[0] == 1:
                fb_text2 = 'images/Win.png'
                resultat_second = "C'est une victoire!"
            else:
                fb_text2 = 'images/Lose.png'
                resultat_second = "C'est une défaite!"

        if key_resp_2.keys == 'up':

            text_avec_outcome_second_color = "black"
            text_sans_outcome_second_color = "black"
            text_domicile_outcome_second_color = "white"
            text_exterieur_outcome_second_color = "black"

            # up or down (ie domicile ou exterieur)
            other_choice = np.random.binomial(1, bern_params["bern_param_{}".format(key_resp_2.keys)], size=1)

            joueur = "right" if other_choice[0] else "left"

            joueur_name = {"right":"sans le joueur", "left":"avec le joueur"}

            outcome2 = np.random.binomial(1, \
                bern_params["bern_param_{}_{}".format(joueur, key_resp_2.keys)], size=1)


            # text assignement for the other choice
            fb_text_choice2 = " Choix du coach adjoint : \n {}".format(joueur_name[joueur])

            #image assignement for the outcome

            if outcome2[0] == 1:
                fb_text2 = 'images/Win.png'
                resultat_second = "C'est une victoire!"
            else:
                fb_text2 = 'images/Lose.png'
                resultat_second = "C'est une défaite!"


        if key_resp_2.keys == 'down':

            text_avec_outcome_second_color = "black"
            text_sans_outcome_second_color = "black"
            text_domicile_outcome_second_color = "black"
            text_exterieur_outcome_second_color = "white"

            # up or down (ie domicile ou exterieur)
            other_choice = np.random.binomial(1, bern_params["bern_param_{}".format(key_resp_2.keys)], size=1)

            joueur = "right" if other_choice[0] else "left"

            joueur_name = {"right":"sans le joueur", "left":"avec le joueur"}

            outcome2 = np.random.binomial(1, \
                bern_params["bern_param_{}_{}".format(joueur, key_resp_2.keys)], size=1)


            # text assignement for the other choice
            fb_text_choice2 = " Choix du coach adjoint : \n {}".format(joueur_name[joueur])

            #image assignement for the outcome

            if outcome2[0] == 1:
                fb_text2 = 'images/Win.png'
                resultat_second = "C'est une victoire!"
            else:
                fb_text2 = 'images/Lose.png'
                resultat_second = "C'est une défaite!"
      End Routine:
        nombre_matchs_second += 1
    ImageComponent image_outcome_2
      image [set every frame] = $fb_text2
      size = (3.5, 3.5)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 4.0
      units = cm
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    TextComponent fb_text_choice2_component
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 1
      pos = (0, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = cm
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      text [set every frame]:
        $fb_text_choice2
    VariableComponent outcome2_var
      startRoutineValue = outcome2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    TextComponent text_nombre_matchs_second_outcome
      color = black
      letterHeight = 1
      pos = (-10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $"match numéro: {}".format(nombre_matchs_second)
      units = cm
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    TextComponent text_avec_outcome_second
      color [set every frame] = $text_avec_outcome_second_color
      letterHeight = 1
      pos = (-5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = $"Avec"+"\n (flèche gauche)"
      units = cm
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    TextComponent text_sans_outcome_second
      color [set every frame] = $text_sans_outcome_second_color
      letterHeight = 1
      pos = (5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = $"Sans"+"\n (flèche droite)"
      units = cm
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    TextComponent text_domicile_outcome_second
      color [set every frame] = $text_domicile_outcome_second_color
      letterHeight = 1
      pos = (0, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = $"domicile" + "\n (flèche du haut)"
      units = cm
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    TextComponent text_exterieur_outcome_second
      color [set every frame] = $text_exterieur_outcome_second_color
      letterHeight = 1
      pos = (0, -5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = $"Extérieur"+"\n (flèche du bas)"
      units = cm
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    TextComponent text_resultat_second
      color = black
      letterHeight = 1
      pos = (0, -10)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 4
      text [set every frame] = $resultat_second
      units = cm
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  Routine instructions_9
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    TextComponent text_instr_9
      letterHeight = 0.04
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
      text = $"Règles du jeu" + "\n"+ " \n Paiement: Une fois les joueurs et équipes évalués, nous calculerons ta rémunération en fonction de la précision de l'impact que tu as donnée aux différents joueurs (-10 à 10) par rapport à leur impact réel." + "\n Le calcul concernant un seul joueur sera tiré au sort pour le calcul du paiement. Si l'impact que vous avez estimée est identique à l'impact réelle du joueur, vous gagnerez 10€." + " \n Plus tu t'éloignes de l'impact réelle, moins tu seras payé (selon le schéma ci-contre)" + "\n Cette somme s'ajoutera aux 5 € de jetons de présence."
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    ImageComponent image_next_9
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_9
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instructions_8
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    TextComponent text_instr_8
      letterHeight = 0.04
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
      text = $"Règles du jeu" + "\n Le jeu se déroule en trois saisons avec en plus une phase préliminaire d'entrainement pour te familiariser avec le jeu." + "\n La première saison, tu seras seul à prendre les décisions."+ "\n Pour la deuxième et troisième saison, les règles changent et seront rappellées avant de commencer."
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    ImageComponent image_next_8
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_8
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
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      Before Experiment:
        short_blocks = [4, 5, 6]
        long_blocks = [38, 40, 42]

        firstRun = [ np.random.randint(2) for i in range(10) ]
        secondRun = [ np.random.randint(2) for i in range(10) ]
        thirdRun = [ np.random.randint(2) for i in range(10) ]

        firstRunBlockDuration = [ (np.random.choice(short_blocks) if firstRun[i] == 0 \
            else np.random.choice(long_blocks)) for i in range(10) ]

        secondRunBlockDuration = [ (np.random.choice(short_blocks) if secondRun[i] == 0 \
            else np.random.choice(long_blocks)) for i in range(10) ]

        thirdRunBlockDuration = [ (np.random.choice(short_blocks) if thirdRun[i] == 0 \
            else np.random.choice(long_blocks)) for i in range(10) ]




        firstCounter = 0
        secondCounter = 0
        thridCounter = 0
  Routine instruction_firstRun
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    TextComponent text_instr_14
      letterHeight = 0.026
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
      text = $"Règles du jeu: Première saison:" + "\n 1. Décidez si le nouveau joueur participe au match ou reste sur le banc." +"\n 2. Observez l'impact du joueur sur l'équipe en terme de victoire ou de défaite." +"\n 3. Vous aurez un certain nombre de matchs pour chaque joueur, joués avec les touches flèche droite (Avec) et flèche gauche (Sans)." + "\n Un smiley content indique une victoire, et un smiley triste indique une défaite." +"\n Prenez votre décision dans les 2 secondes après la disparition du smiley. Sinon, un point d'interrogation apparaîtra."+"\n Évaluez l'impact du joueur sur les matchs avec un score de -10 (minimal) à 10 (maximal) en passant par 0 (neutre) et recommandez ou non l'achat du joueur."
      wrapWidth = 0.56
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    KeyboardComponent key_resp_10
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_end
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    TextComponent text_instr_12
      letterHeight = 0.026
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
      text = $"Fin du jeu" + "\n Merci d'avoir participé!"+"\n Appuyez sur la touche espace pour terminer la session."
      wrapWidth = 0.56
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    KeyboardComponent key_resp_12
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine question
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        try:
            joueur_number = Condition
        except:
            joueur_number = "25"
    SliderComponent attractiveness
      forceEndRoutine = False
      granularity = 1
      labels = (-10, -9, -8, -7, -6, -5, -4, -3, -2, -1,  0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.026
      size = (0.9, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (-10, -9, -8, -7, -6, -5, -4, -3, -2, -1,  0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent text_question_1
      letterHeight = 0.026
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Évaluation de l'impact du joueur {}".format(chr(joueur_number+64)) + "\n" "\n Attribuez une note à l'impact du joueur {} sur le match en utilisant une échelle de -10 (le joueur contribue à la défaite de l'équipe), 0 (aucun impact sur le match) à 10 (le joueur contribue à la victoire de l'équipe).".format(chr(joueur_number+64)) + "\n Cliquez sur valider pour confirmer."
      wrapWidth = 0.56
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    TextComponent validate
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.026
      pos = (0.4, -0.3)
      startVal [time (s)] = 0.0
      text = VALIDER
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    MouseComponent mouse_15
      clickable = validate
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    SliderComponent slider_recommandation
      forceEndRoutine = False
      granularity = 0
      labels = ('non', 'oui')
      letterHeight = 0.026
      pos = (0, -0.3)
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,1)
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    TextComponent text_recommandation
      letterHeight = 0.026
      pos = (0.0, -0.2)
      startVal [time (s)] = 0.0
      text = $"Recommandez-vous l'achat du joueur?"
      wrapWidth = 0.56
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  Routine fixation
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    PolygonComponent cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 40
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  Routine cues
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    VariableComponent nombre_matchs
      saveStartStop = False
      startExpValue = 1
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        try:
            joueur_number = Condition
        except:
            joueur_number = "25"
    TextComponent question_mark_training
      color = black
      letterHeight = 0.026
      pos = (0, -0.1)
      startVal [time (s)] = 2
      text = Trop lent
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    KeyboardComponent key_resp_training
      allowedKeys = 'left','right'
      correctAns = 'left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent avec_training
      color = black
      letterHeight = 0.026
      pos [set every repeat] = tuple(float(x) for x in avec_pos_text.strip("()").split(","))
      startVal [time (s)] = 0.0
      text = $"avec"
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    TextComponent sans_training
      color = black
      letterHeight = 0.026
      pos [set every repeat] = tuple(float(x) for x in sans_pos_text.strip("()").split(","))
      startVal [time (s)] = 0.0
      text = $"sans"
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    TextComponent nombre_match_training
      color = black
      letterHeight = 0.026
      pos = (-0.5, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"match n° {}".format(nombre_matchs)
      wrapWidth = 0.56
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    TextComponent text_question
      color = black
      letterHeight = 0.026
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Question: Voulez vous faire jouer l'équipe avec ou sans le joueur {} ?".format(chr(joueur_number+64))
      wrapWidth = 0.56
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    PolygonComponent cross_training
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
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    ImageComponent avec_cues
      image = images/Avec.png
      pos [set every repeat] = tuple(float(x) for x in avec_pos_image.strip("()").split(","))
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sans_cues
      image = images/Sans.png
      pos [set every repeat] = tuple(float(x) for x in sans_pos_image.strip("()").split(","))
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent joueur
      color = black
      letterHeight = 0.026
      pos = (-0.5, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"joueur {}".format(chr(joueur_number+64))
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  Routine feedback
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    CodeComponent fb_code_4
      Code Type = Py
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        #bern_param_play = 0.5
        #bern_param_not_play = 0.5

        if key_resp_training.keys == avec_key:
            # c'est à dire si avec est actionné en l'occurence play
            # on a Bern(p)
            text_avec_fb_color = "white"
            text_sans_fb_color = "black"
            outcome = np.random.binomial(1, bern_param_play, size=1)
            if outcome == 1 :
                fb_text_training = 'images/Win.png'
                fb_text_training_show = "C'est une victoire!"
            else:
                fb_text_training = 'images/Lose.png'
                fb_text_training_show = "C'est une défaite!"

        if key_resp_training.keys == sans_key:
            # ie si sans est actionné
            text_avec_fb_color = "black"
            text_sans_fb_color = "white"
            outcome = np.random.binomial(1, bern_param_not_play, size=1)
            if outcome == 1:
                fb_text_training = 'images/Win.png'
                fb_text_training_show = "C'est une victoire!"
            else:
                fb_text_training = 'images/Lose.png'
                fb_text_training_show = "C'est une défaite!"

        try:
            joueur_number = Condition
        except:
            joueur_number = "25"


        print('key_resp_training.keys', key_resp_training.keys)
        print('avec color', text_avec_fb_color)
        print('sans color', text_sans_fb_color)
        print('key avec', avec_key)
      End Routine:
        nombre_matchs += 1
    TextComponent text_question_outcome
      color = black
      letterHeight = 0.026
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $"Question: Voulez vous faire jouer l'équipe avec ou sans le joueur {} ?".format(chr(joueur_number+64))
      wrapWidth = 0.56
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    TextComponent nombre_match_training_outcome
      color = black
      letterHeight = 0.026
      pos = (-0.5, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $"match n° {}".format(nombre_matchs)
      wrapWidth = 0.56
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    TextComponent text_avec_fb
      color [set every frame] = $text_avec_fb_color
      letterHeight = 0.026
      pos [set every repeat] = tuple(float(x) for x in avec_pos_text.strip("()").split(","))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = $"avec"
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    TextComponent text_sans_fb
      color [set every frame] = $text_sans_fb_color
      letterHeight = 0.026
      pos [set every repeat] = tuple(float(x) for x in sans_pos_text.strip("()").split(","))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $"sans"
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    ImageComponent avec_feedback
      color [set every repeat] = $text_sans_fb_color
      image = images/Avec.png
      pos [set every repeat] = tuple(float(x) for x in avec_pos_image.strip("()").split(","))
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent sans_feedback
      color [set every repeat] = $text_avec_fb_color
      image = images/Sans.png
      pos [set every repeat] = tuple(float(x) for x in sans_pos_image.strip("()").split(","))
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent outcome_feedback
      image [set every frame] = $fb_text_training
      size = (0.15, 0.15)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 2
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    TextComponent text_resultat
      color = black
      letterHeight = 0.026
      pos = (0, -0.1)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 2
      text [set every repeat] = $fb_text_training_show
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    PolygonComponent cross_outcome_training
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent joueur_feedback
      color = black
      letterHeight = 0.026
      pos = (-0.5, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $"joueur {}".format(chr(joueur_number+64))
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  Routine instr_gen_1
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    CodeComponent code_4
      Code Type = Py
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      Before Experiment:
        short_blocks = [4, 5, 6]
        long_blocks = [38, 40, 42]

        firstRun = [ np.random.randint(2) for i in range(10) ]
        secondRun = [ np.random.randint(2) for i in range(10) ]
        thirdRun = [ np.random.randint(2) for i in range(10) ]

        firstRunBlockDuration = [ (np.random.choice(short_blocks) if firstRun[i] == 0 \
            else np.random.choice(long_blocks)) for i in range(10) ]

        secondRunBlockDuration = [ (np.random.choice(short_blocks) if secondRun[i] == 0 \
            else np.random.choice(long_blocks)) for i in range(10) ]

        thirdRunBlockDuration = [ (np.random.choice(short_blocks) if thirdRun[i] == 0 \
            else np.random.choice(long_blocks)) for i in range(10) ]




        firstCounter = 0
        secondCounter = 0
        thridCounter = 0
    TextComponent text_instr
      letterHeight = 0.026
      pos = (0.0, 0.0)
      startVal [time (s)] = 0.0
      text = $"Insctructions générales:"+"\n Vous êtes un dénicheur de talents pour des équipes de volleyball. Les équipes de la ligue souhaitent connaître votre avis sur la signature de nouveaux joueurs. Vous allez participer à des matchs tests pour évaluer l'impact des nouveaux joueurs sur leur équipe."+"\n Appuyez sur la touche espace pour continuer."
      wrapWidth = 0.56
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_gen_2
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    TextComponent text_instr_2
      letterHeight = 0.026
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
      text = $"Instructions générales:"+ "\n Le jeu se déroule en trois saisons en plus d'une phase d'entraînement pour vous familiariser avec le jeu. Lors de la a première saison, vous prendrez toutes les décisions. Les règles changeront pour la deuxième et troisième saison, vous serez alors assisté par un coach adjoint."+"\n Appuyez sur la touche espace pour continuer."
      wrapWidth = 0.56
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_gen_3
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    TextComponent text_instr_3
      letterHeight = 0.026
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
      text = $"Rémunération"+"\n À la fin de chaque série de jeux, vous évaluerez l'impact du joueur sur les matchs entre -10 (minimal) et 10 (maximal) en passant par 0 (neutre) et recommenderez ou non l'achat du joueur. Votre rémunération sera calculée en fonction de la précision de l'impact que vous avez attribué aux différents joueurs par rapport à leur impact réel. Un seul joueur sera sélectionné au hasard pour le calcul du paiement. Si l'impact estimé est identique à l'impact réel, vous gagnerez 10 €. Plus vous vous éloignez de l'impact réel moins vous serez payé. Cette somme s'ajoutera aux 5 € de jetons de présence." +"\n Appuyez sur la touche espace pour continuer."
      wrapWidth = 0.56
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    KeyboardComponent key_resp_7
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_trial_1
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    TextComponent text_instr_13
      letterHeight = 0.026
      pos = (0.0,0.05)
      startVal [time (s)] = 0.0
      text = $"Règles du jeu:" + "\n Votre objectif est de décider si un nouveau joueur doit participer au match ou rester sur le banc, puis d'évaluer son impact sur l'équipe en termes de victoire ou de défaite. Pour chaque joueur, vous disposerez d'un certain nombre de matchs pour prendre votre décision. Utilisez la touche flèche droite pour inclure le joueur dans le match (Avec) et la touche flèche gauche pour le laisser sur le banc (Sans), figures gauche."+"\n Un smiley souriant représente une victoire, tandis qu'un smiley triste indique une défaite, figures droite. Vous devez prendre votre décision dans les 2 secondes suivant la disparition du smiley." + "\n À la fin de la série de matchs pour chaque joueur, évaluez l'impact du joueur sur les résultats en attribuant un score compris entre -10 (impact négatif) et 10 (impact positif), en passant par 0 (impact neutre). Enfin, recommandez ou non l'achat du joueur en fonction de votre évaluation."+"\n Appuyez sur la touche espace pour commencer."
      wrapWidth = 0.56
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    KeyboardComponent key_resp_8
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_avec
      image = images/Avec.png
      pos = (-0.6, 0.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_sans
      image = images/Sans.png
      pos = (-0.4, 0.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_victoire
      image = images/Win.png
      pos = (0.63, 0.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_defaite
      image = images/Lose.png
      pos = (0.4, 0.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_avec
      color = black
      letterHeight = 0.026
      pos = (-0.6, 0.05)
      startVal [time (s)] = 0.0
      text = $"avec"
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    TextComponent text_sans
      color = black
      letterHeight = 0.026
      pos = (-0.4, 0.05)
      startVal [time (s)] = 0.0
      text = $"sans"
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    TextComponent text_victoire
      color = black
      letterHeight = 0.026
      pos = (0.63, 0.0)
      startVal [time (s)] = 0.0
      text = $"C'est une victoire!"
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    TextComponent text_defaite
      color = black
      letterHeight = 0.026
      pos = (0.4, 0.0)
      startVal [time (s)] = 0.0
      text = $"C'est une défaite!"
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  Routine info_trial_1
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    TextComponent text_2
      letterHeight = 0.026
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = $"Première saison"
      wrapWidth = 0.56
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  Routine instruction_trial_23
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    TextComponent text_instr_11
      letterHeight = 0.026
      pos = (0.0,0.0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_instruction
      wrapWidth = 0.56
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    KeyboardComponent key_resp_11
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent avec_inst_23
      image = images/Avec.png
      pos = (-0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent sans_instr_23
      image = images/Sans.png
      pos = (-0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent domicile_instr_23
      image = images/Home.png
      pos = (0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent exterieur_instr_23
      image = images/Outside.png
      pos = (0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent avec_instr_23
      color = black
      letterHeight = 0.026
      pos = (-0.3, -0.4)
      startVal [time (s)] = 0.0
      text = $"avec"
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    TextComponent sans_inst_23
      color = black
      letterHeight = 0.026
      pos = (-0.1, -0.4)
      startVal [time (s)] = 0.0
      text = $"sans"
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    TextComponent domicile_inst_23
      color = black
      letterHeight = 0.026
      pos = (0.1, -0.4)
      startVal [time (s)] = 0.0
      text = $"domicile"
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    TextComponent exterieur_inst_23
      color = black
      letterHeight = 0.026
      pos = (0.3, -0.4)
      startVal [time (s)] = 0.0
      text = $"extérieur"
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  Routine cues_23
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    VariableComponent nombre_matchs_third
      startExpValue = 1
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    CodeComponent code_observation
      Code Type = Py
      Begin Routine:
        observation_trial = np.random.randint(2)

        if is_task_obs:

            if observation_trial:
                observation_text = "Phase d'observation \n appuyez sur espace pour voir "+\
                                    "les choix du coach adjoint"
                acceptable_keys = ['space']
            else:
                acceptable_keys = ["left", "up", "down", "right"]
                observation_text = "Phase d'intervention"
        else:

            acceptable_keys = ["left", "up", "down", "right"]
            observation_text = ""
        try:
            joueur_number = Condition
        except:
            joueur_number = "25"
    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = $acceptable_keys
      correctAns = left
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent question_mark3
      color = black
      letterHeight = 0.026
      pos = (0, -0.1)
      startVal [time (s)] = 2.0
      text = Trop lent
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    TextComponent avec3
      color = black
      letterHeight = 0.026
      pos [set every repeat] = tuple(float(x) for x in avec_pos_text.strip("()").split(","))
      startVal [time (s)] = 0.0
      text = $"avec"
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    TextComponent sans3
      color = black
      letterHeight = 0.026
      pos [set every repeat] = tuple(float(x) for x in sans_pos_text.strip("()").split(","))
      startVal [time (s)] = 0.0
      text = $"sans"
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    TextComponent domicile3
      color = black
      letterHeight = 0.026
      pos [set every repeat] = tuple(float(x) for x in dom_pos_text.strip("()").split(","))
      startVal [time (s)] = 0.0
      text = $"domicile"
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    TextComponent exterieur3
      color = black
      letterHeight = 0.026
      pos [set every repeat] = tuple(float(x) for x in ext_pos_text.strip("()").split(","))
      startVal [time (s)] = 0.0
      text = $"extérieur"
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    TextComponent observation
      letterHeight = 0.026
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $observation_text
      wrapWidth = 0.56
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    VariableComponent observation_var
      saveStartRoutine = True
      startFrameValue = observation_trial
      startRoutineValue = observation_trial
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    TextComponent text_nombre_matchs_third
      color = black
      letterHeight = 0.026
      pos = (-0.5, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"match n° {}".format(nombre_matchs_third)
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    TextComponent question_trial23
      color = black
      letterHeight = 0.026
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Question: Voulez vous faire jouer l'équipe avec ou sans le joueur, à domicile ou à l'extérieur?".format(chr(joueur_number+64))
      wrapWidth = 0.56
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    TextComponent numero_joueur_cues_23
      color = black
      letterHeight = 0.026
      pos = (-0.5, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"joueur {}".format(chr(joueur_number+64))
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    PolygonComponent cross_fixation
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
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    ImageComponent avec_cues_23
      image = images/Avec.png
      pos [set every repeat] = tuple(float(x) for x in avec_pos_image.strip("()").split(","))
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent sans_cues_23
      image = images/Sans.png
      pos [set every repeat] = tuple(float(x) for x in sans_pos_image.strip("()").split(","))
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent domicile_cues_23
      image = images/Home.png
      pos [set every repeat] = tuple(float(x) for x in dom_pos_image.strip("()").split(","))
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent exterieur_cues_23
      image = images/Outside.png
      pos [set every repeat] = tuple(float(x) for x in ext_pos_image.strip("()").split(","))
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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  Routine feedback_23
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    CodeComponent fb_code_3
      Code Type = Py
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        bern_params = { "bern_param_avec_exterieur": bern_param_left_down,
                        "bern_param_avec_domicile": bern_param_left_up,
                        "bern_param_sans_exterieur": bern_param_right_down,
                        "bern_param_sans_domicile": bern_param_right_up,
                        "bern_param_z": bern_param_z,
                        "bern_param_exterieur": bern_param_down,
                        "bern_param_domicile": bern_param_up}

        dict_keys = {"avec" : avec_key, "sans"  : sans_key, "domicile" : dom_key, "exterieur" : ext_key}
        inv_dict = {v : k for k, v in dict_keys.items()}

        if is_task_obs :

            if observation_trial:
                avec3_outcome_color = "black"
                sans3_outcome_color = "black"
                domicile3_outcome_color = "black"
                exterieur3_outcome_color = "black"

                print('observation_trial')
                terrain_choice = np.random.binomial(1, bern_param_z, size=1)
                terrain = "domicile" if terrain_choice else "exterieur"

                # change color
                formatted_var = "{}3_outcome_color = 'white'".format(terrain)
                exec(formatted_var)

                joueur_choice = np.random.binomial(1, \
                    bern_params["bern_param_{}".format(terrain)], size=1)
                joueur = "avec" if joueur_choice else "sans"

                #change color
                formatted_var2 = "{}3_outcome_color = 'white'".format(joueur)
                exec(formatted_var2)

                outcome3 = np.random.binomial(1, \
                    bern_params["bern_param_{}_{}".format(joueur, terrain)], size=1)

                #avec3_outcome_color = "black"
                #sans3_outcome_color = "black"
                #domicile3_outcome_color = "black"
                #exterieur3_outcome_color = "black"

                image_domicile_opacity = 1 if terrain == "domicile" else 0
                image_exterieur_opacity = 1 if terrain == "exterieur" else 0

                if outcome3[0] == 1:
                    fb_text3 = 'images/Win.png'
                    resultat3_outcome_text = "C'est une victoire!"
                else:
                    fb_text3 = 'images/Lose.png'
                    resultat3_outcome_text = "C'est une défaite!"

                if terrain == "domicile":
                    fb_text_choice3 = "Choix du coach adjoint: \n {} le joueur, \n à {}"\
                        .format(joueur, terrain)
                if terrain == "exterieur":
                    fb_text_choice3 = "Choix du coach adjoint: \n {} le joueur, \n à l' {}"\
                        .format(joueur, terrain)
            else:


                print('intervention_trial')
                if key_resp_3.keys == sans_key:

                    avec3_outcome_color = "black"
                    sans3_outcome_color = "white"
                    domicile3_outcome_color = "black"
                    exterieur3_outcome_color = "black"


                    # right or left (ie play or not play)
                    other_choice = np.random.binomial(1, bern_param_z, size=1)
                    terrain = "domicile" if other_choice[0] else "exterieur"

                    outcome3 = np.random.binomial(1, \
                        bern_params["bern_param_{}_{}".format("sans", terrain)], size=1)

                    # change color for other choice
                    formatted_var_name = "{}3_outcome_color = 'white'".format(terrain)
                    exec(formatted_var_name)

                    image_domicile_opacity = 1 if terrain == "domicile" else 0
                    image_exterieur_opacity = 1 if terrain == "exterieur" else 0

                    # text for the trial
                    fb_text_choice3 = " Choix du coach adjoint : {}".format(terrain)

                    # image outcome assignement
                    if outcome3[0] == 1:
                        fb_text3 = 'images/Win.png'
                        resultat3_outcome_text = "C'est une victoire!"
                    else:
                        fb_text3 = 'images/Lose.png'
                        resultat3_outcome_text = "C'est une défaite!"

                if key_resp_3.keys == avec_key:

                    avec3_outcome_color = "white"
                    sans3_outcome_color = "black"
                    domicile3_outcome_color = "black"
                    exterieur3_outcome_color = "black"

                    image_domicile_opacity = 1
                    image_exterieur_opacity = 1

                    # right or left (ie play or not play)
                    other_choice = np.random.binomial(1, bern_param_z, size=1)
                    terrain = "domicile" if other_choice[0] else "exterieur"

                    outcome3 = np.random.binomial(1, \
                        bern_params["bern_param_{}_{}".format("avec", terrain)], size=1)

                    # change color for other choice
                    print("change color")
                    formatted_var_name = "{}3_outcome_color = 'white'".format(terrain)
                    exec(formatted_var_name)

                    # text for the trial
                    fb_text_choice3 = " Choix du coach adjoint : {}".format(terrain)

                    # image outcome assignement
                    if outcome3[0] == 1:
                        fb_text3 = 'images/Win.png'
                        resultat3_outcome_text = "C'est une victoire!"
                    else:
                        fb_text3 = 'images/Lose.png'
                        resultat3_outcome_text = "C'est une défaite!"

                if key_resp_3.keys == dom_key:

                    avec3_outcome_color = "black"
                    sans3_outcome_color = "black"
                    domicile3_outcome_color = "white"
                    exterieur3_outcome_color = "black"


                    # up or down (ie domicile ou exterieur)
                    other_choice = np.random.binomial(1, bern_params["bern_param_{}".format("domicile")], size=1)
                    joueur = "avec" if other_choice[0] else "sans"

                    outcome3 = np.random.binomial(1, \
                        bern_params["bern_param_{}_{}".format(joueur, "domicile")], size=1)

                    # change color for other choice
                    print("change color")
                    formatted_var_name = "{}3_outcome_color = 'white'".format(joueur)
                    exec(formatted_var_name)


                    image_domicile_opacity = 1
                    image_exterieur_opacity = 0

                    # text assignement for the other choice
                    fb_text_choice3 = " Choix du coach adjoint : {}".format(joueur)

                    # image assignement for the outcome
                    if outcome3[0] == 1:
                        fb_text3 = 'images/Win.png'
                        resultat3_outcome_text = "C'est une victoire!"
                    else:
                        fb_text3 = 'images/Lose.png'
                        resultat3_outcome_text = "C'est une défaite!"

                if key_resp_3.keys == ext_key:

                    avec3_outcome_color = "black"
                    sans3_outcome_color = "black"
                    domicile3_outcome_color = "black"
                    exterieur3_outcome_color = "white"


                    # up or down (ie domicile ou exterieur)
                    other_choice = np.random.binomial(1, \
                        bern_params["bern_param_{}".format("exterieur")], size=1)
                    joueur = "avec" if other_choice[0] else "sans"

                    outcome3 = np.random.binomial(1, \
                        bern_params["bern_param_{}_{}".format(joueur, "exterieur")], size=1)

                    # change color for other choice
                    formatted_var_name = "{}3_outcome_color = 'white'".format(joueur)
                    exec(formatted_var_name)

                    image_domicile_opacity = 0
                    image_exterieur_opacity = 1

                    # text assignement for the other choice
                    fb_text_choice3 = " Choix du coach adjoint : {}".format(joueur)

                    # image assignement for the outcome
                    if outcome3[0] == 1:
                        fb_text3 = 'images/Win.png'
                        resultat3_outcome_text = "C'est une victoire!"
                    else:
                        fb_text3 = 'images/Lose.png'
                        resultat3_outcome_text = "C'est une défaite!"

        else:

            fb_text_choice3 = ""

            if key_resp_3.keys == sans_key:

                avec3_outcome_color = "black"
                sans3_outcome_color = "white"
                domicile3_outcome_color = "black"
                exterieur3_outcome_color = "black"

                # right or left (ie play or not play)
                other_choice = np.random.binomial(1, bern_param_z, size=1)
                terrain = "domicile" if other_choice[0] else "exterieur"

                outcome3 = np.random.binomial(1, \
                    bern_params["bern_param_{}_{}".format("sans", terrain)], size=1)

                # change color
                formatted_var = "{}3_outcome_color = 'white'".format(terrain)
                exec(formatted_var)

                image_domicile_opacity = 1 if terrain == "domicile" else 0
                image_exterieur_opacity = 1 if terrain == "exterieur" else 0

                # text for the trial
                fb_text_choice3 = " Choix du coach adjoint : {}".format(terrain)

                # image outcome assignement
                if outcome3[0] == 1:
                    fb_text3 = 'images/Win.png'
                    resultat3_outcome_text = "C'est une victoire!"
                else:
                    fb_text3 = 'images/Lose.png'
                    resultat3_outcome_text = "C'est une défaite!"

            if key_resp_3.keys == avec_key:

                avec3_outcome_color = "white"
                sans3_outcome_color = "black"
                domicile3_outcome_color = "black"
                exterieur3_outcome_color = "black"

                # right or left (ie play or not play)
                other_choice = np.random.binomial(1, bern_param_z, size=1)
                terrain = "domicile" if other_choice[0] else "exterieur"

                outcome3 = np.random.binomial(1, \
                    bern_params["bern_param_{}_{}".format("avec", terrain)], size=1)

                # change color
                formatted_var = "{}3_outcome_color = 'white'".format(terrain)
                exec(formatted_var)

                image_domicile_opacity = 1 if terrain_name == "domicile" else 0
                image_exterieur_opacity = 1 if terrain_name == "exterieur" else 0

                # text for the trial
                fb_text_choice3 = " Choix du coach adjoint : {}".format(terrain)

                # image outcome assignement
                if outcome3[0] == 1:
                    fb_text3 = 'images/Win.png'
                    resultat3_outcome_text = "C'est une victoire!"
                else:
                    fb_text3 = 'images/Lose.png'
                    resultat3_outcome_text = "C'est une défaite!"

            if key_resp_3.keys == dom_key:

                avec3_outcome_color = "black"
                sans3_outcome_color = "black"
                domicile3_outcome_color = "white"
                exterieur3_outcome_color = "black"

                # up or down (ie domicile ou exterieur)
                other_choice = np.random.binomial(1, \
                    bern_params["bern_param_{}".format(domicile)], size=1)
                joueur = "sans" if other_choice[0] else "avec"

                outcome3 = np.random.binomial(1, \
                    bern_params["bern_param_{}_{}".format(joueur, "domicile")], size=1)

                # change color
                formatted_var = "{}3_outcome_color = 'white'".format(joueur)
                exec(formatted_var)

                image_domicile_opacity = 1
                image_exterieur_opacity = 0

                # text assignement for the other choice
                fb_text_choice3 = " Choix du coach adjoint : {}".format(joueur)

                # image assignement for the outcome
                if outcome3[0] == 1:
                    fb_text3 = 'images/Win.png'
                    resultat3_outcome_text = "C'est une victoire!"
                else:
                    fb_text3 = 'images/Lose.png'
                    resultat3_outcome_text = "C'est une défaite!"

            if key_resp_3.keys == ext_key:

                avec3_outcome_color = "black"
                sans3_outcome_color = "black"
                domicile3_outcome_color = "black"
                exterieur3_outcome_color = "white"

                # up or down (ie domicile ou exterieur)
                other_choice = np.random.binomial(1, \
                    bern_params["bern_param_{}".format("exterieur")], size=1)
                joueur = "sans" if other_choice[0] else "avec"

                outcome3 = np.random.binomial(1, \
                    bern_params["bern_param_{}_{}".format(joueur, "exterieur")], size=1)

                # change color
                formatted_var = "{}3_outcome_color = 'white'".format(joueur)
                exec(formatted_var)

                image_domicile_opacity = 0
                image_exterieur_opacity = 1

                # text assignement for the other choice
                fb_text_choice3 = " Choix du coach adjoint : {}".format(joueur)

                # image assignement for the outcome
                if outcome3[0] == 1:
                    fb_text3 = 'images/Win.png'
                    resultat3_outcome_text = "C'est une victoire!"
                else:
                    fb_text3 = 'images/Lose.png'
                    resultat3_outcome_text = "C'est une défaite!"


        try:
            joueur_number = Condition
        except:
            joueur_number = "25"
      End Routine:
        nombre_matchs_third += 1
    TextComponent fb_text_choice_component
      color = black
      letterHeight = 0.026
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $fb_text_choice3
      wrapWidth = 0.56
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    ImageComponent image_outcome3
      image [set every frame] = $fb_text3
      size = (3.5, 3.5)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 3.5
      units = cm
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    VariableComponent outcome3_var
      startRoutineValue = outcome3
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
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    TextComponent nombre_matchs_third_outcome
      color = black
      letterHeight = 0.026
      pos = (-0.5, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $"match n° {}".format(nombre_matchs_third)
      wrapWidth = 0.56
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    TextComponent avec3_outcome
      color [set every frame] = $avec3_outcome_color
      letterHeight = 0.026
      pos [set every repeat] = tuple(float(x) for x in avec_pos_text.strip("()").split(","))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = $"avec"
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    TextComponent sans3_outcome
      color [set every frame] = $sans3_outcome_color
      letterHeight = 0.026
      pos [set every repeat] = tuple(float(x) for x in sans_pos_text.strip("()").split(","))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = $"sans"
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    TextComponent domicile3_outcome
      color [set every frame] = $domicile3_outcome_color
      letterHeight = 0.026
      pos [set every repeat] = tuple(float(x) for x in dom_pos_text.strip("()").split(","))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = $"domicile"
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    TextComponent exterieur3_outcome
      color [set every frame] = $exterieur3_outcome_color
      letterHeight = 0.026
      pos [set every repeat] = tuple(float(x) for x in ext_pos_text.strip("()").split(","))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = $"extérieur"
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    TextComponent resultat3_outcome
      color = black
      letterHeight = 0.026
      pos = (0, -0.1)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 3.5
      text [set every frame] = $resultat3_outcome_text
      wrapWidth = 0.56
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    ImageComponent domicile_image23
      color [set every repeat] = $exterieur3_outcome_color
      image = images/Home.png
      opacity [set every repeat] = 1
      pos [set every repeat] = tuple(float(x) for x in dom_pos_image.strip("()").split(","))
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    ImageComponent exterieur_image23
      color [set every repeat] = $domicile3_outcome_color
      image = images/Outside.png
      opacity [set every repeat] = 1
      pos [set every repeat] = tuple(float(x) for x in ext_pos_image.strip("()").split(","))
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    TextComponent question_outcome23
      color = black
      letterHeight = 0.026
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $"Question: Voulez vous faire jouer l'équipe avec ou sans le joueur, à domicile ou à l'extérieur?".format(chr(joueur_number+64))
      wrapWidth = 0.56
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    TextComponent text_joueur_numero
      color = black
      letterHeight = 0.026
      pos = (-0.5, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $"joueur {}".format(chr(joueur_number+64))
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    PolygonComponent cross_feedback23
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent avec_image23
      color [set every repeat] = $sans3_outcome_color
      image = images/Avec.png
      pos [set every repeat] = tuple(float(x) for x in avec_pos_image.strip("()").split(","))
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    ImageComponent sans_image23
      color [set every repeat] = $avec3_outcome_color
      image = images/Sans.png
      pos [set every repeat] = tuple(float(x) for x in sans_pos_image.strip("()").split(","))
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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  Routine ending
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    TextComponent text
      letterHeight = 0.026
      startVal [time (s)] = 0.0
      text = $"Fin."+"\n Appuyez sur la touche espace pour passer à la saison suivante."
      wrapWidth = 0.56
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine info_training
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    TextComponent text_3
      letterHeight = 0.026
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = $"Début de l'entraînement"
      wrapWidth = 0.56
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  Routine demographics
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    TextComponent age
      letterHeight = 0.026
      pos = (0.0, 0.4)
      startVal [time (s)] = 0.0
      text = À quel groupe d'âge appartenez-vous?
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    SliderComponent respAge
      forceEndRoutine = False
      granularity = 1
      labels = ("Moins de 16", "16-20", "21-25", "26-30", "31-35", "36-40", "Plus de 40")
      letterHeight = 0.026
      pos = (0, 0.3)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent gender
      letterHeight = 0.026
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Quel est votre genre?
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    SliderComponent genderResp1
      forceEndRoutine = False
      granularity = 1
      labels = ("Autre", "Non-binaire", "Homme", "Femme")
      letterHeight = 0.026
      pos = (0, 0.15)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4)
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    TextComponent student
      letterHeight = 0.026
      startVal [time (s)] = 0.0
      text = Êtes-vous étudiant?
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    SliderComponent studentResp
      forceEndRoutine = False
      granularity = 1
      labels = ("Licence", "Master", "Doctorat", "Non")
      letterHeight = 0.026
      pos = (0, -0.05)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4)
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    TextComponent mood
      letterHeight = 0.026
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text = Quel est votre humeur actuelle? 
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    SliderComponent moodResp
      forceEndRoutine = False
      granularity = 0
      labels = ("Low", "Okay", "Great!")
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (1.1, 0.02)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3)
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    ImageComponent nextButton
      image = next.png
      pos = (0, -0.4)
      size = (0.15, 0.075)
      startVal [condition] = respAge.rating and genderResp1.rating and studentResp.rating and moodResp.rating
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    MouseComponent mouse
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine joueur_number_instr
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        try:
            joueur_number = Condition
        except:
            joueur_number = "25"
    TextComponent text_4
      letterHeight = 0.026
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $"Joueur {}".format(chr(joueur_number+64))
      wrapWidth = 0.56
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Flow
  Routine demographics
  Routine instr_gen_1
  Routine instr_gen_2
  Routine instr_gen_3
  Routine instruction_trial_1
  Routine info_training
  LoopInitiator trainingRun loopType="TrialHandler"
    conditions = [OrderedDict([('Condition', 25), ('bern_param_play', 0.9), ('bern_param_not_play', 0.1), ('dP', 0.8)])]
    conditionsFile = conditions/loopConditions.csv
    isTrials = False
    loopType = random
    nReps = 1
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    Routine joueur_number_instr
    LoopInitiator trainingBlocks loopType="TrialHandler"
      Selected rows = $[np.random.randint(1, 4)]
      conditionsFile = conditions/CounterBalancedKeys.csv
      isTrials = False
      loopType = random
      nReps = 5
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      conditions:
        [OrderedDict([('Condition', 1), ('avec_key', 'left'), ('sans_key', 'right'), ('dom_key', 'up'), ('ext_key', 'down'), ('avec_pos_text', '(-0.2,-0.1)'), ('sans_pos_text', '(0.2,-0.1)'), ('dom_pos_text', '(0,0.1)'), ('ext_pos_text', '(0,-0.1)'), ('avec_pos_image', '(-0.2,0.0)'), ('sans_pos_image', '(0.2,0.0)'), ('ext_pos_image', '(0.0, 0.1)'), ('dom_pos_image', '(0.0, -0.1)')]),
        OrderedDict([('Condition', 2), ('avec_key', 'right'), ('sans_key', 'left'), ('dom_key', 'up'), ('ext_key', 'down'), ('avec_pos_text', '(0.2,-0.1)'), ('sans_pos_text', '(-0.2,-0.1)'), ('dom_pos_text', '(0,0.1)'), ('ext_pos_text', '(0,-0.1)'), ('avec_pos_image', '(0.2,0.0)'), ('sans_pos_image', '(-0.2,0.0)'), ('ext_pos_image', '(0.0, 0.1)'), ('dom_pos_image', '(0.0, -0.1)')]),
        OrderedDict([('Condition', 3), ('avec_key', 'left'), ('sans_key', 'right'), ('dom_key', 'down'), ('ext_key', 'up'), ('avec_pos_text', '(-0.2,-0.1)'), ('sans_pos_text', '(0.2,-0.1)'), ('dom_pos_text', '(0,-0.1)'), ('ext_pos_text', '(0,0.1)'), ('avec_pos_image', '(-0.2,0.0)'), ('sans_pos_image', '(0.2,0.0)'), ('ext_pos_image', '(0.0, -0.1)'), ('dom_pos_image', '(0.0, 0.1)')]),
        OrderedDict([('Condition', 4), ('avec_key', 'right'), ('sans_key', 'left'), ('dom_key', 'down'), ('ext_key', 'up'), ('avec_pos_text', '(0.2,-0.1)'), ('sans_pos_text', '(-0.2,-0.1)'), ('dom_pos_text', '(0,-0.1)'), ('ext_pos_text', '(0,0.1)'), ('avec_pos_image', '(0.2,0.0)'), ('sans_pos_image', '(-0.2,0.0)'), ('ext_pos_image', '(0.0, -0.1)'), ('dom_pos_image', '(0.0, 0.1)')])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
      Routine fixation
      Routine cues
      Routine feedback
    LoopTerminator trainingBlocks
    Routine question
    Routine ending
  LoopTerminator trainingRun
  Routine info_trial_1
  Routine instruction_trial_1
  LoopInitiator firstRun loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = conditions/loopConditionsExp1.csv
    isTrials = False
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('Condition', 1), ('bern_param_play', 0.2), ('bern_param_not_play', 0.8), ('dP', -0.6), ('impact', -6)]),
      OrderedDict([('Condition', 2), ('bern_param_play', 0.2), ('bern_param_not_play', 0.8), ('dP', -0.6), ('impact', -6)]),
      OrderedDict([('Condition', 3), ('bern_param_play', 0.2), ('bern_param_not_play', 0.8), ('dP', -0.6), ('impact', -6)]),
      OrderedDict([('Condition', 4), ('bern_param_play', 0.5), ('bern_param_not_play', 0.5), ('dP', 0.0), ('impact', 0)]),
      OrderedDict([('Condition', 5), ('bern_param_play', 0.5), ('bern_param_not_play', 0.5), ('dP', 0.0), ('impact', 0)]),
      OrderedDict([('Condition', 6), ('bern_param_play', 0.5), ('bern_param_not_play', 0.5), ('dP', 0.0), ('impact', 0)]),
      OrderedDict([('Condition', 7), ('bern_param_play', 0.8), ('bern_param_not_play', 0.2), ('dP', 0.6), ('impact', 6)]),
      OrderedDict([('Condition', 8), ('bern_param_play', 0.8), ('bern_param_not_play', 0.2), ('dP', 0.6), ('impact', 6)]),
      OrderedDict([('Condition', 9), ('bern_param_play', 0.8), ('bern_param_not_play', 0.2), ('dP', 0.6), ('impact', 6)])]
    Routine joueur_number_instr
    LoopInitiator firstBlocks loopType="TrialHandler"
      Selected rows = $[np.random.randint(1, 4)]
      conditionsFile = conditions/CounterBalancedKeys.csv
      loopType = sequential
      nReps = 3
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      conditions:
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      Routine fixation
      Routine cues
      Routine feedback
    LoopTerminator firstBlocks
    Routine question
  LoopTerminator firstRun
  Routine ending
  LoopInitiator loop_exps23 loopType="TrialHandler"
    conditionsFile = $'conditions/loopCounterBalanced'+expInfo['group']+'.csv'
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instruction_trial_23
    LoopInitiator innerRun loopType="TrialHandler"
      conditionsFile = conditions/loopConditionsExp2.csv
      isTrials = False
      loopType = fullRandom
      nReps = 1
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      conditions:
        [OrderedDict([('Condition', 10), ('bern_param_left_down', 0.5), ('bern_param_left_up', 0.5), ('bern_param_right_down', 0.5), ('bern_param_right_up', 0.5), ('bern_param_z', 0.6), ('bern_param_up', 0.4), ('bern_param_down', 0.6), ('impact', 0)]),
        OrderedDict([('Condition', 11), ('bern_param_left_down', 0.5), ('bern_param_left_up', 0.5), ('bern_param_right_down', 0.5), ('bern_param_right_up', 0.5), ('bern_param_z', 0.6), ('bern_param_up', 0.4), ('bern_param_down', 0.6), ('impact', 0)]),
        OrderedDict([('Condition', 12), ('bern_param_left_down', 0.5), ('bern_param_left_up', 0.5), ('bern_param_right_down', 0.5), ('bern_param_right_up', 0.5), ('bern_param_z', 0.6), ('bern_param_up', 0.4), ('bern_param_down', 0.6), ('impact', 0)]),
        OrderedDict([('Condition', 13), ('bern_param_left_down', 0.2), ('bern_param_left_up', 0.8), ('bern_param_right_down', 0.8), ('bern_param_right_up', 0.2), ('bern_param_z', 0.6), ('bern_param_up', 0.4), ('bern_param_down', 0.6), ('impact', 6)]),
        OrderedDict([('Condition', 14), ('bern_param_left_down', 0.2), ('bern_param_left_up', 0.8), ('bern_param_right_down', 0.8), ('bern_param_right_up', 0.2), ('bern_param_z', 0.6), ('bern_param_up', 0.4), ('bern_param_down', 0.6), ('impact', 6)]),
        OrderedDict([('Condition', 15), ('bern_param_left_down', 0.2), ('bern_param_left_up', 0.8), ('bern_param_right_down', 0.8), ('bern_param_right_up', 0.2), ('bern_param_z', 0.6), ('bern_param_up', 0.4), ('bern_param_down', 0.6), ('impact', 6)])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
      Routine joueur_number_instr
      LoopInitiator innerBlocks loopType="TrialHandler"
        Selected rows = $[np.random.randint(1, 8)]
        conditionsFile = conditions/CounterBalancedKeys.csv
        loopType = random
        nReps = 30
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        conditions:
          [OrderedDict([('Condition', 1), ('avec_key', 'left'), ('sans_key', 'right'), ('dom_key', 'up'), ('ext_key', 'down'), ('avec_pos_text', '(-0.2,-0.1)'), ('sans_pos_text', '(0.2,-0.1)'), ('dom_pos_text', '(0,0.1)'), ('ext_pos_text', '(0,-0.3)'), ('avec_pos_image', '(-0.2,0.0)'), ('sans_pos_image', '(0.2,0.0)'), ('dom_pos_image', '(0.0, 0.2)'), ('ext_pos_image', '(0.0,-0.2)')]),
          OrderedDict([('Condition', 2), ('avec_key', 'right'), ('sans_key', 'left'), ('dom_key', 'up'), ('ext_key', 'down'), ('avec_pos_text', '(0.2,-0.1)'), ('sans_pos_text', '(-0.2,-0.1)'), ('dom_pos_text', '(0,0.1)'), ('ext_pos_text', '(0,-0.3)'), ('avec_pos_image', '(0.2,0.0)'), ('sans_pos_image', '(-0.2,0.0)'), ('dom_pos_image', '(0.0, 0.2)'), ('ext_pos_image', '(0.0,-0.2)')]),
          OrderedDict([('Condition', 3), ('avec_key', 'left'), ('sans_key', 'right'), ('dom_key', 'down'), ('ext_key', 'up'), ('avec_pos_text', '(-0.2,-0.1)'), ('sans_pos_text', '(0.2,-0.1)'), ('dom_pos_text', '(0,-0.3)'), ('ext_pos_text', '(0,0.1)'), ('avec_pos_image', '(-0.2,0.0)'), ('sans_pos_image', '(0.2,0.0)'), ('dom_pos_image', '(0.0, -0.2)'), ('ext_pos_image', '(0.0, 0.2)')]),
          OrderedDict([('Condition', 4), ('avec_key', 'right'), ('sans_key', 'left'), ('dom_key', 'down'), ('ext_key', 'up'), ('avec_pos_text', '(0.2,-0.1)'), ('sans_pos_text', '(-0.2,-0.1)'), ('dom_pos_text', '(0,-0.3)'), ('ext_pos_text', '(0,0.1)'), ('avec_pos_image', '(0.2,0.0)'), ('sans_pos_image', '(-0.2,0.0)'), ('dom_pos_image', '(0.0, -0.2)'), ('ext_pos_image', '(0.0, 0.2)')])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
        Routine fixation
        Routine cues_23
        Routine feedback_23
      LoopTerminator innerBlocks
      Routine question
    LoopTerminator innerRun
    Routine ending
  LoopTerminator loop_exps23
  Routine instruction_end
